---
API: 3
OpenSesame: 4.0.24
Platform: nt
---
set width 1820
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set psychopy_screen 1
set mouse_backend psycho
set keyboard_backend psycho
set height 1080
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "C:\\Users\\dsfgr\\Desktop\\ESG_Exp"
set disable_garbage_collection True
set description "The main experiment item"
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#3d3846"

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run getting_started True
	run welcome True
	run new_form_consent True
	run new_form_text_input True
	run new_form_multiple_choice True
	run new_1_form_multiple_choice True
	run new_2_form_multiple_choice True
	run new_3_form_multiple_choice True
	run new_5_form_multiple_choice True
	run new_6_form_multiple_choice True
	run new_4_form_multiple_choice True
	run new_1_form_text_display True
	run new_7_form_multiple_choice True
	run new_8_form_multiple_choice True
	run new_9_form_multiple_choice True
	run new_6_form_text_input True
	run new_10_form_multiple_choice True
	run new_1_sequence True
	run new_3_form_text_input True
	run new_4_form_text_input True
	run new_5_form_text_input True
	run new_form_text_display True
	run new_1_pygaze_init True
	run new_loop True
	run new_13_form_multiple_choice True
	run new_14_form_multiple_choice True
	run new_3_form_text_display True
	run new_logger True

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define form_multiple_choice new_10_form_multiple_choice
	set timeout infinite
	set spacing 10
	set question "¿Qué nivel de rentabilidad esperas de tus inversiones en empresas con prácticas ASG?"
	__options__
	Menor que la media del mercado
	Mayor que la media del mercado
	__end__
	set margins "50;50;50;50"
	set form_var rentabilidad_asg
	set form_title Cuestionario
	set description "A simple multiple choice item"
	set button_text Continuar
	set allow_multiple no
	set advance_immediately no
	set _theme gray

define form_multiple_choice new_11_form_multiple_choice
	set timeout infinite
	set spacing 10
	__question__
	¿Estarías dispuesto a perder un 12,3% de rentabilidad
	monetaria a cambio de un 44% adicional de retorno ASG?
	__end__
	__options__
	Si
	No
	__end__
	set margins "50;50;50;50"
	set form_var first_dicotomic
	set form_title Cuestionario
	set description "A simple multiple choice item"
	set button_text Continuar
	set allow_multiple no
	set advance_immediately no
	set _theme gray

define form_multiple_choice new_12_form_multiple_choice
	set timeout infinite
	set spacing 10
	set question "¿Crees que puedes ganar un 0,6% de retorno monetario por aumentar en un 1% el retorno ASG?"
	__options__
	Si, hasta un 0,6%
	No, más de un 0,6%
	__end__
	set margins "50;50;50;50"
	set form_var first_dicotomic
	set form_title Cuestionario
	set description "A simple multiple choice item"
	set button_text Continuar
	set allow_multiple no
	set advance_immediately no
	set _theme gray

define form_multiple_choice new_13_form_multiple_choice
	set timeout infinite
	set spacing 10
	__question__
	Sabiendo que el activo 'P' corresponde a SQM y el activo 'Q' a ITAU Unibanco
	¿cambiarías tu decisión en algún caso?
	__end__
	__options__
	Si
	No
	__end__
	set margins "50;50;50;50"
	set form_var cambio
	set form_title Cuestionario
	set description "A simple multiple choice item"
	set button_text Continue
	set allow_multiple no
	set advance_immediately no
	set _theme gray

define form_multiple_choice new_14_form_multiple_choice
	set timeout infinite
	set spacing 10
	__question__
	Sabiendo que algunos graficos mostraban la métrica ASG entregada por un solo
	proveedor (S&P) y otros una ponderación de dos (S&P y Bloomberg) 
	¿cambiarías tu decisión en algún caso?
	__end__
	__options__
	Si 
	No
	__end__
	set margins "50;50;50;50"
	set form_var cambio2
	set form_title Cuestionario
	set description "A simple multiple choice item"
	set button_text Continuar
	set allow_multiple no
	set advance_immediately no
	set _theme gray

define form_multiple_choice new_1_form_multiple_choice
	set timeout infinite
	set spacing 10
	set question "¿Cuál es tu nivel educacional?"
	__options__
	Sin ningún tipo de educación
	Educación básica
	Educación media
	Universitario
	Posgrado
	Otro
	__end__
	set margins "50;50;50;50"
	set form_var nivel_educacion
	set form_title Cuestionario
	set description "A simple multiple choice item"
	set button_text Continuar
	set allow_multiple no
	set advance_immediately no
	set _theme gray

define form_text_display new_1_form_text_display
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Continuar
	set margins "50;50;50;50"
	set form_title "Criterios ASG"
	__form_text__
	Los criterios ASG (Ambientales, Sociales y de Gobernanza) son un conjunto de estándares para las operaciones de una empresa que pueden ser usados por inversionistas para evaluar posibles inversiones. A continuación, se explican cada uno de estos criterios:
	
	Criterios Ambientales: Se refieren al desempeño de una empresa en relación con el medio ambiente. Esto incluye aspectos como:
	-Emisiones de gases de efecto invernadero.
	-Uso eficiente de los recursos naturales (agua, energía, etc.).
	-Gestión de residuos y reciclaje.
	-Impacto ambiental de sus productos y servicios.
	
	Criterios Sociales: Evaluan cómo una empresa maneja sus relaciones con empleados, proveedores, clientes y las comunidades en las que opera. Los aspectos clave incluyen:
	-Condiciones laborales y derechos humanos.
	-Diversidad e inclusión en el lugar de trabajo.
	-Seguridad y salud ocupacional.
	-Impacto en las comunidades locales.
	
	Criterios de Gobernanza: Se centran en la estructura y prácticas de gobierno corporativo de una empresa. Esto incluye:
	-Composición y diversidad del consejo de administración.
	-Políticas de compensación y remuneración de ejecutivos.
	-Transparencia y ética en la gestión empresarial.
	-Relación con los accionistas y medidas contra la corrupción.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define form_text_input new_1_form_text_input
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var second_dicotomic
	set form_title Cuestionario
	set form_question "¿Cuánto retorno monetario estarías dispuesto a perder a cambio de aumentar en el mismo 44% el retorno ASG?"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="{form_title}"
	widget 0 1 1 1 label center=no text="{form_question}"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="{form_var}"


define inline_script new_1_inline_script
	set description "Executes Python code"
	___run__
	# Establecer la variable 'mi_variable' a None
	var.first_dicotomic = None
	__end__
	set _prepare ""

define pygaze_init new_1_pygaze_init
	set tracker_type OpenGaze
	set tobiiglasses_udpport 49152
	set tobiiglasses_address "192.168.71.50"
	set smi_send_port 4444
	set smi_recv_port 5555
	set smi_ip "127.0.0.1"
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set eyelink_pupil_size_mode area
	set eyelink_force_drift_correct yes
	set description "Initializes and calibrates the eye tracker"
	set calibrate no
	set calbeep yes
	set alea_api_key "Contact Alea for an API key"
	set alea_animated_calibration no
	set _logfile automatic

define pygaze_start_recording new_1_pygaze_start_recording
	set status_msg "start_trial [scatter]"
	set description "Puts the eye tracker out of recording mode"

define sequence new_1_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_11_form_multiple_choice "rentabilidad_asg == 'Menor que la media del mercado'"
	run new_12_form_multiple_choice "rentabilidad_asg == 'Mayor que la media del mercado'"
	run new_2_sequence True
	run new_2_form_text_input "rentabilidad_asg == 'Mayor que la media del mercado'"

define form_multiple_choice new_2_form_multiple_choice
	set timeout infinite
	set spacing 10
	set question "¿Cuál es tu ocupación actual?"
	__options__
	Estudiante
	Empleado/a
	Independiente
	Desempleado/a
	Jubilado/a
	Otro
	__end__
	set margins "50;50;50;50"
	set form_var ocupacion
	set form_title Cuestionario
	set description "A simple multiple choice item"
	set button_text Continuar
	set allow_multiple no
	set advance_immediately no
	set _theme gray

define form_text_display new_2_form_text_display
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Continuar
	set margins "50;50;50;50"
	set form_title "Criterios ASG"
	__form_text__
	Criterios de Gobernanza: Se centran en la estructura y prácticas de gobierno corporativo de una empresa. Esto incluye:
	-Composición y diversidad del consejo de administración.
	-Políticas de compensación y remuneración de ejecutivos.
	-Transparencia y ética en la gestión empresarial.
	-Relación con los accionistas y medidas contra la corrupción.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define form_text_input new_2_form_text_input
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var second_dicotomic
	set form_title Cuestionario
	set form_question "¿Hasta cuánto esperarías que aumente el retorno monetario con un aumento del 1% de retorno ASG?"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="{form_title}"
	widget 0 1 1 1 label center=no text="{form_question}"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="{form_var}"


define inline_script new_2_inline_script
	set description "Executes Python code"
	___run__
	scatter_name = var.scatter.replace('.png', '')  # Eliminar .png del nombre
	respuesta = var.response
	
	# Registrar la variable usando el objeto `var`
	setattr(var, scatter_name, respuesta)
	__end__
	set _prepare ""

define sequence new_2_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_1_form_text_input "first_dicotomic == 'No'"

define form_multiple_choice new_3_form_multiple_choice
	set timeout infinite
	set spacing 10
	set question "¿Tienes experiencia en la gestión de tus finanzas personales?"
	__options__
	Si
	No
	__end__
	set margins "50;50;50;50"
	set form_var experiencia_finanzas
	set form_title Cuestionario
	set description "A simple multiple choice item"
	set button_text Continuar
	set allow_multiple no
	set advance_immediately no
	set _theme gray

define form_text_display new_3_form_text_display
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Terminar
	set margins "50;50;50;50"
	set form_title "Experimento finalizado"
	set form_text "Muchas gracias por participar de este experimento"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define form_text_input new_3_form_text_input
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var crt_1
	set form_title "Test de Reflexión Cognitiva"
	set form_question "Un bate y una pelota cuestan $1.10 en total. El bate cuesta $1.00 más que la pelota. ¿Cuánto cuesta la pelota? _____ centavos"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="{form_title}"
	widget 0 1 1 1 label center=no text="{form_question}"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="{form_var}"


define form_multiple_choice new_4_form_multiple_choice
	set timeout infinite
	set spacing 10
	set question "¿Qué tan familiarizado estás con el concepto de finanzas responsables ASG?"
	__options__
	Muy familiarizado
	Algo familiarizado
	Poco familiarizado
	Nada familiarizado
	__end__
	set margins "50;50;50;50"
	set form_var concepto_asg
	set form_title Cuestionario
	set description "A simple multiple choice item"
	set button_text Continuar
	set allow_multiple no
	set advance_immediately no
	set _theme gray

define form_text_input new_4_form_text_input
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var crt_2
	set form_title "Test de Reflexión Cognitiva"
	set form_question "Si 5 máquinas tardan 5 minutos en fabricar 5 widgets, ¿cuánto tiempo tardarían 100 máquinas en fabricar 100 widgets? _____ minutos"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="{form_title}"
	widget 0 1 1 1 label center=no text="{form_question}"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="{form_var}"


define form_multiple_choice new_5_form_multiple_choice
	set timeout infinite
	set spacing 10
	set question "¿Con qué frecuencia utilizas herramientas digitales para la gestión de tus finanzas?"
	__options__
	Diariamente
	Semanalmente
	Mensualmente
	Raramente
	Nunca
	__end__
	set margins "50;50;50;50"
	set form_var gestion_digital
	set form_title Cuestionario
	set description "A simple multiple choice item"
	set button_text Continuar
	set allow_multiple no
	set advance_immediately no
	set _theme gray

define form_text_input new_5_form_text_input
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var crt_3
	set form_title "Test de Reflexión Cognitiva"
	set form_question "En un lago, hay un parche de lirios. Cada día, el parche duplica su tamaño. Si tarda 48 días en cubrir todo el lago, ¿cuánto tiempo tardaría en cubrir la mitad del lago? _____ días"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="{form_title}"
	widget 0 1 1 1 label center=no text="{form_question}"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="{form_var}"


define form_multiple_choice new_6_form_multiple_choice
	set timeout infinite
	set spacing 10
	set question "¿Tienes alguna inversión (acciones, bonos, fondos mutuos, etc.)?"
	__options__
	Si
	No
	__end__
	set margins "50;50;50;50"
	set form_var inverisiones
	set form_title Cuestionario
	set description "A simple multiple choice item"
	set button_text Continuar
	set allow_multiple no
	set advance_immediately no
	set _theme gray

define form_text_input new_6_form_text_input
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var hrs_semanal
	set form_title Cuestionario
	set form_question "¿Cuántas horas a la semana le dedicas a pensar/analizar tus finanzas?"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="{form_title}"
	widget 0 1 1 1 label center=no text="{form_question}"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="{form_var}"


define form_multiple_choice new_7_form_multiple_choice
	set timeout infinite
	set spacing 10
	set question "¿Qué tan interesado/a estás en invertir en empresas que siguen prácticas ASG?"
	__options__
	Muy interesado/a
	Algo interesado/a
	Poco interesado/a
	Nada interesado/a
	__end__
	set margins "50;50;50;50"
	set form_var interes_empresas_asg
	set form_title Cuestionario
	set description "A simple multiple choice item"
	set button_text Continuar
	set allow_multiple no
	set advance_immediately no
	set _theme gray

define form_multiple_choice new_8_form_multiple_choice
	set timeout infinite
	set spacing 10
	__question__
	¿Consideras que las prácticas ASG son importantes para el
	futuro de la economía y la sociedad?
	__end__
	__options__
	Muy importantes
	Algo importantes
	Poco importantes
	Nada importantes
	__end__
	set margins "50;50;50;50"
	set form_var importancia_asg
	set form_title Cuestionario
	set description "A simple multiple choice item"
	set button_text Continuar
	set allow_multiple no
	set advance_immediately no
	set _theme gray

define form_multiple_choice new_9_form_multiple_choice
	set timeout infinite
	set spacing 10
	set question "¿Cómo describes tu estilo de toma de decisiones financieras?"
	__options__
	Muy analítico/a
	Algo analítico/a
	Poco analítico/a
	Nada analítico/a
	__end__
	set margins "50;50;50;50"
	set form_var estilo_decisiones
	set form_title Cuestionario
	set description "A simple multiple choice item"
	set button_text Continuar
	set allow_multiple no
	set advance_immediately no
	set _theme gray

define form_consent new_form_consent
	set timeout infinite
	set spacing 10
	set rows "1;4;1;1"
	set only_render no
	set margins "50;50;50;50"
	set form_title Consentimiento
	set form_text "He leído y aceptado la ficha de consentimiento informado entregada por los investigadores del experimento"
	set description "A simple consent form"
	set decline_text No
	set decline_message "Debes aceptar el consentimiento para participar"
	set cols "2;2"
	set checkbox_text "He leído, entendido y aceptado el consentimiento"
	set accept_text Si
	set _theme gray
	widget 0 0 2 1 label text="{form_title}"
	widget 0 1 2 1 label center=no text="{form_text}"
	widget 0 2 2 1 checkbox text="{checkbox_text}" var=checkbox_status
	widget 0 3 1 1 button text="{accept_text}" var=accept_status
	widget 1 3 1 1 button text="{decline_text}"


define form_multiple_choice new_form_multiple_choice
	set timeout infinite
	set spacing 10
	set question "¿Con que género te identificas?"
	__options__
	Masculino    
	Femenino
	Otro
	Prefiero no decirlo
	__end__
	set margins "50;50;50;50"
	set form_var genero
	set form_title Cuestionario
	set description "A simple multiple choice item"
	set button_text Continuar
	set allow_multiple no
	set advance_immediately no
	set _theme gray

define form_text_display new_form_text_display
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Continuar
	set margins "50;50;50;50"
	set form_title "Comienzo experimento"
	__form_text__
	Se iniciará el eye-tracker. 
	
	A continuación se calibrará el dispositivo, para esto debes mirar fijamente el punto que aparece en la pantalla y mantener la vista en el.
	
	Luego de eso, se iniciará el experimento donde se pide analizar 14 gráficos y definir una preferencia entre los activos presentados presionando la tecla Q o P según corresponda. Entre cada gráfico habrá una cruz que debes mirar para continuar.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define form_text_input new_form_text_input
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var edad
	set form_title Cuestionario
	set form_question "¿Cuántos años tienes?"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="{form_title}"
	widget 0 1 1 1 label center=no text="{form_question}"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="{form_var}"


define inline_script new_inline_script
	set description "Executes Python code"
	___run__
	# Capturar la respuesta del teclado
	from openexp.keyboard import keyboard
	kb = keyboard(exp)
	
	# Limpiar teclas pendientes antes de capturar la respuesta
	while kb.get_key(timeout=1)[0] is not None:
	    pass
	
	# Esperar a que se presione una tecla
	key, time = kb.get_key(keylist=['q', 'p'], timeout=None)
	
	# Guardar la respuesta en una variable
	var.response = key
	var.response_time = time
	__end__
	set _prepare ""

define logger new_logger
	set description "Logs experimental data"
	set auto_log no
	log datetime
	log accept_status
	log concepto_asg
	log edad
	log genero
	log estilo_decisiones
	log experiencia_finanzas
	log gestion_digital
	log importancia_asg
	log interes_empresas_asg
	log inverisiones
	log nivel_educacion
	log ocupacion
	log rentabilidad_asg
	log response
	log hrs_semanal
	log first_dicotomic
	log second_dicotomic
	log crt_1
	log crt_2
	log crt_3
	log plot_1YTD
	log plot_2YTD
	log plot_3YTD
	log plot_4YTD
	log plot_5YTD
	log plot_6YTD
	log plot_7YTD
	log plot_combined_1YTD
	log plot_combined_2YTD
	log plot_combined_3YTD
	log plot_combined_4YTD
	log plot_combined_5YTD
	log plot_combined_6YTD
	log plot_combined_7YTD
	log cambio
	log cambio2

define loop new_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 14
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 scatter "plot_1YTD.png"
	setcycle 1 scatter "plot_2YTD.png"
	setcycle 2 scatter "plot_3YTD.png"
	setcycle 3 scatter "plot_4YTD.png"
	setcycle 4 scatter "plot_5YTD.png"
	setcycle 5 scatter "plot_6YTD.png"
	setcycle 6 scatter "plot_7YTD.png"
	setcycle 7 scatter "plot_combined_1YTD.png"
	setcycle 8 scatter "plot_combined_2YTD.png"
	setcycle 9 scatter "plot_combined_3YTD.png"
	setcycle 10 scatter "plot_combined_4YTD.png"
	setcycle 11 scatter "plot_combined_5YTD.png"
	setcycle 12 scatter "plot_combined_6YTD.png"
	setcycle 13 scatter "plot_combined_7YTD.png"
	run new_sequence

define pygaze_drift_correct new_pygaze_drift_correct
	set ypos 0
	set xpos 0
	set target_style "large-cross"
	set target_color "[foreground]"
	set fixation_triggered yes
	set draw_target yes
	set description "Performs eye-tracker drift correction"

define pygaze_log new_pygaze_log
	set throttle 2
	set msg ""
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define pygaze_stop_recording new_pygaze_stop_recording
	set status_msg stop_trial
	set description ""

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_pygaze_drift_correct True
	run new_1_pygaze_start_recording True
	run new_sketchpad True
	run new_inline_script True
	run new_2_inline_script True
	run new_pygaze_log True
	run new_pygaze_stop_recording True

define sketchpad new_sketchpad
	set duration keypress
	set description "Displays stimuli"
	set background white
	draw image center=1 file="[scatter]" scale=0.5 show_if=True x=0 y=0 z_index=0

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=True text="OpenSesame 4.0 <i>Melodramatic Milgram</i>" x=0 y=0 z_index=0

